opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Agar Plating Experiments
author: Naail Kashif-Khan
description: Experimenting with different dispensing parameters to determine optimal way to pipette cells onto an agar plate
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 9}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  Loading Dye: {definitionId: custom_beta/grenierbioone_96_wellplate_340ul/1, location: 5}
  Agar Plate: {definitionId: custom_beta/nunc_rectangular_agar_plate/1, location: 2}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - OrangeG: {description: OrangeG loading dye diluted 2x in ddh20}
ingredLocations:
  Loading Dye:
    OrangeG {volume: 150}: A1-H1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A1
  dispense_mmFromBottom: 0
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A2
  dispense_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A4
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A5
  dispense_mmFromBottom: 1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A6
  dispense_mmFromBottom: 1
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A7
  dispense_mmFromBottom: 1.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A8
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A9
  dispense_mmFromBottom: 2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A11
  dispense_mmFromBottom: 2.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Loading Dye
  aspirate_wells: A1
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  dispense_labware: Agar Plate
  dispense_wells: A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/grenierbioone_96_wellplate_340ul/1:
    brand: {brand: Grenier Bio-One, brandId: [655-161]}
    metadata: {displayName: Grenier Bio-One 96 Well Plate 340 ul, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 14.6}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: grenierbioone_96_wellplate_340ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 10.9, totalLiquidVolume: 340, shape: circular, diameter: 8, x: 14.38, y: 74.24, z: 3.7}
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  custom_beta/nunc_rectangular_agar_plate/1:
    brand: {brand: Nunc, brandId: [264728]}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 14.5}
    metadata: {displayCategory: wellPlate, displayName: Nunc rectangular agar plate2, displayVolumeUnits: µL, tags: []}
    namespace: custom_beta
    parameters: {format: irregular, isMagneticModuleCompatible: false, isTiprack: false, loadName: nunc_rectangular_agar_plate, quirks: []}
    version: 1
    wells:
      A1: {depth: 4, diameter: 5.5, shape: circular, totalLiquidVolume: 50, x: 14.38, y: 74.23, z: 10.5}
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commands:
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- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_multi_gen2, volume: 10, labwareId: Loading Dye, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
- dispense: {pipetteId: p20_multi_gen2, volume: 10, labwareId: Agar Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 7.6}
- dropTip: {pipetteId: p20_multi_gen2, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A2}
- aspirate: {pipetteId: p20_multi_gen2, volume: 10, labwareId: Loading Dye, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
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