opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Pilot Encapsulin Golden Gate Assembly & Transformation
author: Naail Kashif-Khan
description: Protocol to set up Golden Gate DNA assembly reactions, transform into E. coli, and plate onto a rectangular agar plate
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: right}
  p300_multi_gen2: {mount: left}
modules:
  temperatureModuleV2: {location: 3}
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 2}
  Master Mixes: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, location: 9}
  Competent Cells: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, location: temperatureModuleV2}
  Agar Plate: {definitionId: custom_beta/nunc_rectangular_agar_plate/1, location: 4}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 5}
  Golden Gate Rxns: {definitionId: custom_beta/nest_96_wellplate_200ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Golden Gate Master Mix: {description: Master Mix containing BsaI, T4 Ligase, Ligase Buffer, pSB1C3-FB vector, and ddH20}
  - Competent Cells: {description: Pre-made E. coli DH5alpha competent cell stock in glycerol and CaCl2}
  - Insert gBlocks: {description: Synthetic DNA fragments encoding pilot encapsulin designs, resuspended at 50 ng/ul in ddH20, serialize: true}
  - Agar: {description: LB Agar supplemented with 25 ug/ml chloramphenicol, 1mM IPTG, and 200 ug/ml X-gal}
  - SOC Medium: {description: 2% tryptone, 0.5% yeast extract, 10 mM NaCl, 2.5 mM KCl, 10 mM MgCl2, 10 mM MgSO4, and 20 mM glucose}
ingredLocations:
  Master Mixes:
    Golden Gate Master Mix {volume: 53.1}: A1-H1
    Insert gBlocks {volume: 13}: A2-H2
    SOC Medium {volume: 200}: A3-H3, A4-H4, A5-H5, A6-H6
  Competent Cells:
    Competent Cells {volume: 33}: A12-H12
  Agar Plate:
    Agar {volume: 30}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 16.1
  path: single
  changeTip: once
  aspirate_labware: Master Mixes
  aspirate_wells: A1
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  dispense_labware: Golden Gate Rxns
  dispense_wells: A1-A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 3.9
  path: single
  changeTip: once
  aspirate_labware: Master Mixes
  aspirate_wells: A2
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  dispense_labware: Golden Gate Rxns
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 15
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 20
  profileTargetLidTemp: 105
  orderedProfileItems:
    - {type: profileCycle, repetitions: 30}
      - {type: profileStep, title: Cutting, temperature: 37, durationMinutes: 5, durationSeconds: 0}
      - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 5, durationSeconds: 0}
    - {type: profileStep, title: Heat Inactivation, temperature: 65, durationMinutes: 20, durationSeconds: 0}
  blockIsActiveHold: false
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Golden Gate reactions finished - add competent cells to temperature module plate, SOC medium to master mixes plate, and agar plate to slot 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseMessage: Waiting for temperature module to reach 4°C
  pauseTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: Competent Cells
  aspirate_wells: A12
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  dispense_labware: Competent Cells
  dispense_wells: A1-A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 15
  path: single
  changeTip: always
  aspirate_labware: Golden Gate Rxns
  aspirate_wells: A1-A3
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  dispense_labware: Competent Cells
  dispense_wells: A1-A3
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseHour: 0
  pauseMinute: 30
  pauseSecond: 0
  pauseMessage: Incubating at 4 °C for transformation
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 42
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 42
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseHour: 0
  pauseMinute: 1
  pauseSecond: 0
  pauseMessage: Heat shocking for 60 seconds...
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseHour: 0
  pauseMinute: 5
  pauseMessage: Recovering cells at 4 °C for 5 minutes...
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 175
  path: single
  changeTip: always
  aspirate_labware: Master Mixes
  aspirate_wells: A3-A5
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  dispense_labware: Competent Cells
  dispense_wells: A1-A3
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Cells ready for outgrowth - seal plate now
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 37
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 37
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseHour: 1
  pauseMinute: 0
  pauseSecond: 0
  pauseMessage: Outgrowth at 37 °C for 1 hour
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Outgrowth finished - remove seal now
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Competent Cells
  aspirate_wells: A1-A3
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  dispense_labware: Agar Plate
  dispense_wells: A1-A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Competent Cells
  aspirate_wells: A1-A3
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  dispense_labware: Agar Plate
  dispense_wells: A4-A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 144
  path: single
  changeTip: always
  aspirate_labware: Competent Cells
  aspirate_wells: A1-A3
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 54
  path: single
  changeTip: always
  aspirate_labware: Master Mixes
  aspirate_wells: A6
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  dispense_labware: Competent Cells
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 4
  dispense_mix_volume: 25
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Competent Cells
  aspirate_wells: A1-A3
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  dispense_labware: Agar Plate
  dispense_wells: A7-A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Competent Cells
  aspirate_wells: A1-A3
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  dispense_labware: Agar Plate
  dispense_wells: A10-A12
labwareDefinitions:
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  custom_beta/nunc_rectangular_agar_plate/1:
    brand: {brand: Nunc, brandId: [264728]}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 14.5}
    metadata: {displayCategory: wellPlate, displayName: Nunc rectangular agar plate2, displayVolumeUnits: µL, tags: []}
    namespace: custom_beta
    parameters: {format: irregular, isMagneticModuleCompatible: false, isTiprack: false, loadName: nunc_rectangular_agar_plate, quirks: []}
    version: 1
    wells:
      A1: {depth: 4, diameter: 5.5, shape: circular, totalLiquidVolume: 50, x: 14.38, y: 74.23, z: 10.5}
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  custom_beta/nest_96_wellplate_200ul_pcr_full_skirt/1:
    brand: {brand: NEST, brandId: []}
    metadata: {displayName: NEST 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 15.7}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: nest_96_wellplate_200ul_pcr_full_skirt}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 14.78, totalLiquidVolume: 200, shape: circular, diameter: 5.34, x: 14.38, y: 74.24, z: 0.92}
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_multi_gen2, volume: 16.1, labwareId: Master Mixes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
- dispense: {pipetteId: p20_multi_gen2, volume: 16.1, labwareId: Golden Gate Rxns, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 7.6}
- aspirate: {pipetteId: p20_multi_gen2, volume: 16.1, labwareId: Master Mixes, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 7.6}
- dispense: {pipetteId: p20_multi_gen2, volume: 16.1, labwareId: Golden Gate Rxns, wellName: A2, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 7.6}
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